<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="CANINEHIPNAV PlusServer: NDI Polaris tracker with passive markers" 
      Description="Broadcasting tool tracking data through OpenIGTLink For NDI Polaris passive marker starting kit: Reamer (8700338), Stylus (8700340), Impactor (8700339), and Reference (8700449)" />
    <Device
      Id="TrackerDevice"
      Type="PolarisTracker"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Webcam" RomFile="1.rom"  />]
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Webcam"/>
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="WebcamToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>